PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = WordPriming Experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $word_study
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $word_practice
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word_study': 'vase'},
      {'word_study': 'tiger'},
      {'word_study': 'book'},
      {'word_study': 'cushion'},
      {'word_study': 'piano '},
      {'word_study': 'mouse'},
      {'word_study': 'pastry'},
      {'word_study': 'cake'},
      {'word_study': 'cruise'},
      {'word_study': 'keys'},
      {'word_study': 'poster'},
      {'word_study': 'phone'},
      {'word_study': 'marble'},
      {'word_study': 'police'},
      {'word_study': 'chart'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word_practice': 'v_s_', 'reference': 'vase', 'old_new': 'old'},
      {'word_practice': 't_g_r', 'reference': 'tiger', 'old_new': 'old'},
      {'word_practice': 'b_o_', 'reference': 'book', 'old_new': 'old'},
      {'word_practice': '_u_h_o_', 'reference': 'cushion', 'old_new': 'old'},
      {'word_practice': '_i_n_', 'reference': 'piano ', 'old_new': 'old'},
      {'word_practice': 'm_u_e', 'reference': 'mouse', 'old_new': 'old'},
      {'word_practice': 'p_s_r_y', 'reference': 'pastry', 'old_new': 'old'},
      {'word_practice': '_a_e', 'reference': 'cake', 'old_new': 'old'},
      {'word_practice': 'c_u_s_', 'reference': 'cruise', 'old_new': 'old'},
      {'word_practice': '_e_s', 'reference': 'keys', 'old_new': 'old'},
      {'word_practice': '_o_t_r', 'reference': 'poster', 'old_new': 'old'},
      {'word_practice': 'p_o_e', 'reference': 'phone', 'old_new': 'old'},
      {'word_practice': 'm_a_b_e', 'reference': 'marble', 'old_new': 'old'},
      {'word_practice': 'p_l_c_', 'reference': 'police', 'old_new': 'old'},
      {'word_practice': 'c_a_t', 'reference': 'chart', 'old_new': 'old'},
      {'word_practice': 'b_t_l_', 'reference': 'bottle', 'old_new': 'new'},
      {'word_practice': '_e_c_l', 'reference': 'pencil', 'old_new': 'new'},
      {'word_practice': '_a_t_p', 'reference': 'laptop', 'old_new': 'new'},
      {'word_practice': '_s_i_t', 'reference': 'tshirt', 'old_new': 'new'},
      {'word_practice': 'c_s_', 'reference': 'case', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
