PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = OddOneOut_Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome to the Odd-One-Out Task.
        You will see three words on the screen. Two belong to the same category, and one is different.
        Press 1 for the left word, 2 for the middle word, and 3 for the right word.
        Respond quickly and accurately.
        You will have 2 seconds to answer.
        Press SPACE to start.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine trial
    RoutineSettingsComponent trial
      disabled = True
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    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        stim1 = visual.TextStim(win, text="Stimulus 1")
      Begin Routine:
        stim1.setAutoDraw(True)
    TextComponent word_1
      disabled = True
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = $stim1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        stim2 = visual.TextStim(win, text="Stimulus 2")
      Begin Routine:
        stim2.setAutoDraw(True)
    TextComponent word_2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $stim2
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        stim3 = visual.TextStim(win, text="Stimulus 3")
      Begin Routine:
        stim3.setAutoDraw(True)
    TextComponent word_3
      disabled = True
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = $stim3
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3',
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if timeLimit:
            max_duration = timeLimit  # Time limit from Excel file
        else:
            max_duration = None  # No time limit for untimed trials
      Each Frame:
        #if max_duration and t >= max_duration:
        #    continueRoutine = False
        #
  Routine odd_out_routine
    RoutineSettingsComponent odd_out_routine
      stopVal [duration (s)] = 2.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        duration = 2.0
      Begin Routine:
        thisExp.addData("time_condition", "Pressure")
    TextComponent word_one
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $stim1
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    TextComponent word_two
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $stim2
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    TextComponent word_three
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $stim3
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine fixation_2
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    TextComponent fixation_cross_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine odd_out_routine_2
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        duration = 120
      Begin Routine:
        thisExp.addData("time_condition", "No Pressure")
    TextComponent word_one_2
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      text [set every repeat] = $stim1
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    TextComponent word_two_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      text [set every repeat] = $stim2
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    TextComponent word_three_2
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      text [set every repeat] = $stim3
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cc
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $str(5-int(t))
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  Routine instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Choosing the odd one out in the upcoming combinations has no time limit.
        Take your time.
        When you are ready, go ahead.
  Routine EndInstruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for participating. :)
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimwords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim1': 'dog', 'stim2': 'car', 'stim3': 'cat', 'correctAns': 2, 'difficulty': 'easy'},
      {'stim1': 'rose', 'stim2': 'daisy', 'stim3': 'chair', 'correctAns': 3, 'difficulty': 'medium'},
      {'stim1': 'cat', 'stim2': 'dog', 'stim3': 'lion', 'correctAns': 2, 'difficulty': 'hard'},
      {'stim1': 'apple', 'stim2': 'banana', 'stim3': 'pencil', 'correctAns': 3, 'difficulty': 'easy'},
      {'stim1': 'sofa', 'stim2': 'table', 'stim3': 'lamp', 'correctAns': 3, 'difficulty': 'medium'},
      {'stim1': 'pluto', 'stim2': 'earth', 'stim3': 'mars', 'correctAns': 1, 'difficulty': 'hard'},
      {'stim1': 'bicycle', 'stim2': 'apple ', 'stim3': 'train', 'correctAns': 2, 'difficulty': 'easy'},
      {'stim1': 'fish', 'stim2': 'bird', 'stim3': 'shark', 'correctAns': 2, 'difficulty': 'medium'},
      {'stim1': 'trumpet ', 'stim2': 'flute', 'stim3': 'violin', 'correctAns': 3, 'difficulty': 'hard'},
      {'stim1': 'sunflower', 'stim2': 'winter', 'stim3': 'rain', 'correctAns': 1, 'difficulty': 'easy'},
      {'stim1': 'car', 'stim2': 'bus', 'stim3': ' aeroplane', 'correctAns': 3, 'difficulty': 'medium'},
      {'stim1': 'cheetah', 'stim2': 'dolphin', 'stim3': 'leopard', 'correctAns': 2, 'difficulty': 'hard'},
      {'stim1': 'sun', 'stim2': 'book', 'stim3': 'moon', 'correctAns': 2, 'difficulty': 'easy'},
      {'stim1': 'square', 'stim2': 'rectangle ', 'stim3': 'triangle', 'correctAns': 3, 'difficulty': 'medium'},
      {'stim1': 'octopus ', 'stim2': 'penguin', 'stim3': 'squid', 'correctAns': 2, 'difficulty': 'hard'}]
    Routine fixation
    Routine odd_out_routine
  LoopTerminator trials_2
  Routine instruction
  Routine cc
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimwords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim1': 'dog', 'stim2': 'car', 'stim3': 'cat', 'correctAns': 2, 'difficulty': 'easy'},
      {'stim1': 'rose', 'stim2': 'daisy', 'stim3': 'chair', 'correctAns': 3, 'difficulty': 'medium'},
      {'stim1': 'cat', 'stim2': 'dog', 'stim3': 'lion', 'correctAns': 2, 'difficulty': 'hard'},
      {'stim1': 'apple', 'stim2': 'banana', 'stim3': 'pencil', 'correctAns': 3, 'difficulty': 'easy'},
      {'stim1': 'sofa', 'stim2': 'table', 'stim3': 'lamp', 'correctAns': 3, 'difficulty': 'medium'},
      {'stim1': 'pluto', 'stim2': 'earth', 'stim3': 'mars', 'correctAns': 1, 'difficulty': 'hard'},
      {'stim1': 'bicycle', 'stim2': 'apple ', 'stim3': 'train', 'correctAns': 2, 'difficulty': 'easy'},
      {'stim1': 'fish', 'stim2': 'bird', 'stim3': 'shark', 'correctAns': 2, 'difficulty': 'medium'},
      {'stim1': 'trumpet ', 'stim2': 'flute', 'stim3': 'violin', 'correctAns': 3, 'difficulty': 'hard'},
      {'stim1': 'sunflower', 'stim2': 'winter', 'stim3': 'rain', 'correctAns': 1, 'difficulty': 'easy'},
      {'stim1': 'car', 'stim2': 'bus', 'stim3': ' aeroplane', 'correctAns': 3, 'difficulty': 'medium'},
      {'stim1': 'cheetah', 'stim2': 'dolphin', 'stim3': 'leopard', 'correctAns': 2, 'difficulty': 'hard'},
      {'stim1': 'sun', 'stim2': 'book', 'stim3': 'moon', 'correctAns': 2, 'difficulty': 'easy'},
      {'stim1': 'square', 'stim2': 'rectangle ', 'stim3': 'triangle', 'correctAns': 3, 'difficulty': 'medium'},
      {'stim1': 'octopus ', 'stim2': 'penguin', 'stim3': 'squid', 'correctAns': 2, 'difficulty': 'hard'}]
    Routine fixation_2
    Routine odd_out_routine_2
  LoopTerminator trials
  Routine EndInstruction
